<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.9.1"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:p1="clr-namespace:AindDynamicForagingDataSchema;assembly=Extensions"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:py="clr-namespace:Bonsai.Scripting.Python;assembly=Bonsai.Scripting.Python"
                 xmlns:p2="clr-namespace:;assembly=Extensions"
                 xmlns:p3="clr-namespace:System.Reactive;assembly=System.Reactive.Core"
                 xmlns:p4="clr-namespace:AllenNeuralDynamics.AindBehaviorServices.DataTypes;assembly=AllenNeuralDynamics.AindBehaviorServices"
                 xmlns:num="clr-namespace:Bonsai.Numerics;assembly=Bonsai.Numerics"
                 xmlns:sys="clr-namespace:System;assembly=mscorlib"
                 xmlns:scr="clr-namespace:Bonsai.Scripting.Expressions;assembly=Bonsai.Scripting.Expressions"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="TaskLogicPath" DisplayName="TaskPath" />
        <Property Name="RigPath" />
        <Property Name="SessionPath" />
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="AllenNeuralDynamics.Core:ReadSchemas.bonsai">
        <TaskLogicPath>C:\git\Aind.Behavior.DynamicForaging\local\AindDynamicForagingTaskLogic.json</TaskLogicPath>
        <RigPath>C:\git\Aind.Behavior.DynamicForaging\local\AindDynamicForagingRig.json</RigPath>
        <SessionPath>C:\git\Aind.Behavior.DynamicForaging\local\Session.json</SessionPath>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>LoadSchemas</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>RawSessionSchema</Name>
            </Expression>
            <Expression xsi:type="p1:DeserializeFromJson">
              <p1:Type xsi:type="TypeMapping" TypeArguments="p1:Session" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:AsyncSubject">
              <Name>SessionSchema</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>RawRigSchema</Name>
            </Expression>
            <Expression xsi:type="p1:DeserializeFromJson">
              <p1:Type xsi:type="TypeMapping" TypeArguments="p1:AindDynamicForagingRig" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:AsyncSubject">
              <Name>RigSchema</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>RawTaskLogicSchema</Name>
            </Expression>
            <Expression xsi:type="p1:DeserializeFromJson">
              <p1:Type xsi:type="TypeMapping" TypeArguments="p1:AindDynamicForagingTaskLogic" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:AsyncSubject">
              <Name>TaskLogicSchema</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>TaskParameters</Selector>
            </Expression>
            <Expression xsi:type="rx:AsyncSubject">
              <Name>TaskLogicParameters</Name>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="11" To="12" Label="Source1" />
            <Edge From="12" To="13" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>Init</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="py:CreateRuntime">
                <py:PythonHome>../.venv</py:PythonHome>
                <py:ScriptPath>./Extensions\bonsai.py</py:ScriptPath>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="BooleanProperty">
                <Value>false</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>IsWaveformUploadDone</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="BooleanProperty">
                <Value>false</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>IsRetracted</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p2:CreateAutoWaterState">
                <p2:Value xsi:nil="true" />
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>GlobalAutoWaterState</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>StartExperiment</Name>
            </Expression>
            <Expression xsi:type="Unit" />
            <Expression xsi:type="rx:PublishSubject">
              <Name>TriggerHarpReadDump</Name>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject" TypeArguments="p3:Unit">
              <rx:Name>StartLogging</rx:Name>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject" TypeArguments="p3:Unit">
              <rx:Name>StartExperiment</rx:Name>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject" TypeArguments="p3:Unit">
              <rx:Name>EndExperiment</rx:Name>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject" TypeArguments="p4:SoftwareEvent">
              <rx:Name>SoftwareEvent</rx:Name>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject" TypeArguments="p1:TrialOutcome">
              <rx:Name>GlobalTrialOutcome</rx:Name>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject" TypeArguments="p1:Trial">
              <rx:Name>GlobalTrial</rx:Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>TaskLogicParameters</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>RngSeed</Selector>
            </Expression>
            <Expression xsi:type="rx:AsyncSubject">
              <Name>RngSeedValue</Name>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Seed" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="num:CreateRandom">
                <num:Seed xsi:nil="true" />
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:AsyncSubject">
              <Name>RngObject</Name>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject" TypeArguments="sys:Tuple(sys:Boolean,sys:Double)">
              <rx:Name>SetIsRightRewardAmount</rx:Name>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject" TypeArguments="p1:TrialMetrics">
              <rx:Name>GlobalTrialMetrics</rx:Name>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject" TypeArguments="sys:Int32">
              <rx:Name>TrialIndex</rx:Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="BooleanProperty">
                <Value>false</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>StartExperiment</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="BooleanProperty">
                <Value>true</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>EndExperiment</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="BooleanProperty">
                <Value>false</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Merge" />
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>ExperimentState</Name>
            </Expression>
            <Expression xsi:type="Annotation">
              <Name>Default size</Name>
              <Text><![CDATA[Volume will be set per trial basis based on trial generator spec]]></Text>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="DoubleProperty">
                <Value>2</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>DefaultRewardSize</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>SetIsRightRewardAmount</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="BooleanProperty">
                <Value>true</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>DefaultRewardSize</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>SetIsRightRewardAmount</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="BooleanProperty">
                <Value>false</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>DefaultRewardSize</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="DoubleProperty">
                <Value>-5</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="DoubleProperty">
                <Value>5</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:AsyncSubject">
              <Name>BiasOffsetBounds</Name>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="11" To="12" Label="Source1" />
            <Edge From="19" To="20" Label="Source1" />
            <Edge From="20" To="21" Label="Source1" />
            <Edge From="21" To="22" Label="Source1" />
            <Edge From="22" To="23" Label="Source1" />
            <Edge From="23" To="24" Label="Source1" />
            <Edge From="28" To="29" Label="Source1" />
            <Edge From="29" To="36" Label="Source1" />
            <Edge From="30" To="31" Label="Source1" />
            <Edge From="31" To="32" Label="Source1" />
            <Edge From="32" To="36" Label="Source2" />
            <Edge From="33" To="34" Label="Source1" />
            <Edge From="34" To="35" Label="Source1" />
            <Edge From="35" To="36" Label="Source3" />
            <Edge From="36" To="37" Label="Source1" />
            <Edge From="38" To="39" Label="Source1" />
            <Edge From="39" To="40" Label="Source1" />
            <Edge From="41" To="42" Label="Source1" />
            <Edge From="42" To="43" Label="Source1" />
            <Edge From="43" To="45" Label="Source1" />
            <Edge From="44" To="45" Label="Source2" />
            <Edge From="46" To="47" Label="Source1" />
            <Edge From="47" To="48" Label="Source1" />
            <Edge From="48" To="50" Label="Source1" />
            <Edge From="49" To="50" Label="Source2" />
            <Edge From="51" To="53" Label="Source1" />
            <Edge From="52" To="53" Label="Source2" />
            <Edge From="53" To="54" Label="Source1" />
            <Edge From="54" To="55" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>StartupLogic</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="rx:BehaviorSubject" TypeArguments="p3:Unit">
              <rx:Name>StartExperimentShortcut</rx:Name>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="SubscribeSubject">
                <Name>IsWaveformUploadDone</Name>
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="rx:Condition">
                <Workflow>
                  <Nodes>
                    <Expression xsi:type="WorkflowInput">
                      <Name>Source1</Name>
                    </Expression>
                    <Expression xsi:type="WorkflowOutput" />
                  </Nodes>
                  <Edges>
                    <Edge From="0" To="1" Label="Source1" />
                  </Edges>
                </Workflow>
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Combinator">
                <Combinator xsi:type="rx:Timeout">
                  <rx:DueTime>PT10S</rx:DueTime>
                </Combinator>
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Combinator">
                <Combinator xsi:type="rx:Take">
                  <rx:Count>1</rx:Count>
                </Combinator>
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Combinator">
                <Combinator xsi:type="rx:Zip" />
              </Builder>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="Unit" />
            <Expression xsi:type="MulticastSubject">
              <Name>StartLogging</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Delay">
                <rx:DueTime>PT2S</rx:DueTime>
              </Combinator>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>StartExperiment</Name>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="5" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source2" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="9" To="10" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="Extensions\HardwareQA.bonsai" />
      <Expression xsi:type="Annotation">
        <Name />
        <Text><![CDATA[]]></Text>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="Extensions\Hardware.bonsai" />
      <Expression xsi:type="IncludeWorkflow" Path="Extensions\OperationControl.bonsai" />
      <Expression xsi:type="IncludeWorkflow" Path="Extensions\TaskEngine.bonsai" />
      <Expression xsi:type="scr:ExpressionCondition">
        <scr:Name>isNull</scr:Name>
        <scr:Expression>it == null</scr:Expression>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Take">
          <rx:Count>1</rx:Count>
        </Combinator>
      </Expression>
      <Expression xsi:type="Unit" />
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Delay">
          <rx:DueTime>PT0.5S</rx:DueTime>
        </Combinator>
      </Expression>
      <Expression xsi:type="MulticastSubject">
        <Name>EndExperiment</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>StartExperiment</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:SubscribeWhen" />
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="Extensions\Logging.bonsai" />
      <Expression xsi:type="SubscribeSubject">
        <Name>EndExperiment</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Delay">
          <rx:DueTime>PT1S</rx:DueTime>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:TakeUntil" />
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>StartLogging</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:SubscribeWhen" />
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>EndExperiment</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Take">
          <rx:Count>1</rx:Count>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Delay">
          <rx:DueTime>PT2S</rx:DueTime>
        </Combinator>
      </Expression>
      <Expression xsi:type="WorkflowOutput" />
      <Expression xsi:type="rx:Defer">
        <Name>Visualizers</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="IncludeWorkflow" Path="Extensions\Visualizers.bonsai" />
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="9" To="10" Label="Source1" />
      <Edge From="10" To="11" Label="Source1" />
      <Edge From="11" To="12" Label="Source1" />
      <Edge From="12" To="13" Label="Source1" />
      <Edge From="13" To="14" Label="Source1" />
      <Edge From="14" To="16" Label="Source1" />
      <Edge From="15" To="16" Label="Source2" />
      <Edge From="17" To="20" Label="Source1" />
      <Edge From="18" To="19" Label="Source1" />
      <Edge From="19" To="20" Label="Source2" />
      <Edge From="20" To="22" Label="Source1" />
      <Edge From="21" To="22" Label="Source2" />
      <Edge From="23" To="24" Label="Source1" />
      <Edge From="24" To="25" Label="Source1" />
      <Edge From="25" To="26" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>